OpenViBE-Scenario(FormatVersion=2, Creator=OpenViBE Designer, CreatorVersion=2.2.0)
0x790d75b8 = Jussi T. Lindgren
0x9f5c4075 = ERP : Record Signal
0xf8034a49 = Inria
Comment
  The main ERP Recording scenario
Comment
  Change the path of Display cue image box
Comment
  Change the path of GDF file writer box

Acquisition client => #0
  Acquisition server hostname = ${AcquisitionServer_HostName}
  Acquisition server port = 1024
Data=#0.Signal stream, Stimulations=#0.Stimulations -> 0x341d3912 0xc73e83ec Signal display "Debug: display"
  Display Mode = Scan
  Auto vertical scale = Per channel
  Scale refresh interval (secs) = 5
  Vertical Scale = 100
  Vertical Offset = 0
  Time Scale = 10
  Bottom ruler = true
  Left ruler = false
  Multiview = false
#0.Stimulations -> Player Controller
  Stimulation name = OVTK_StimulationId_ExperimentStop
  Action to perform = Stop
#0.Stimulations -> 0x341d3912 Stimulation listener "Debug: Timeline finally from server"
  Log level to use = Information
Timeline generator => #4
  Lua Script = C:/Users/user/Desktop/ERP_tuto/share/erp_lua.lua
-> Display cue image
  Display images in full screen = true
  Scale images to fit = true
  Clear screen Stimulation = OVTK_StimulationId_VisualStimulationStop
  Cue Image 1 = C:/Users/user/Desktop/ERP_tuto/share/red2.png
  Stimulation 1 = OVTK_StimulationId_Label_01
  Cue Image 2 = C:/Users/user/Desktop/ERP_tuto/share/yellow2.png
  Stimulation 2 = OVTK_StimulationId_Label_02
  Cue Image 3 = C:/Users/user/Desktop/ERP_tuto/share/blue2.png
  Stimulation 3 = OVTK_StimulationId_Label_03
  Cue Image 4 = C:/Users/user/Desktop/ERP_tuto/share/cross1.png
  Stimulation 4 = OVTK_GDF_Cross_On_Screen
  Cue Image 5 = C:/Users/user/Desktop/ERP_tuto/share/rest1.png
  Stimulation 5 = OVTK_StimulationId_RestStart
#4 -> 0x341d3912 0xc73e83ec Stimulation listener "Debug: Generated timeline"
  Log level to use = Information
Signal=#0.Signal stream, Stimulations=#4 -> 0x341d3912 EDF File Writer
  Filename = C:/Users/user/Desktop/data_folder/ERP-target-RED-[$core{date}-$core{time}].edf
Signal=#0.Signal stream, Stimulation=#4 -> GDF file writer
  Filename = C:/Users/user/Desktop/data_folder/ERP-target-RED-[$core{date}-$core{time}].gdf
